<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:AindBehaviorDeviceOlfactometerDataSchema;assembly=Extensions"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:p4="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p5="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" DisplayName="TaskPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoadSchemas.bonsai">
        <TaskLogicPath />
        <RigPath />
        <SessionPath />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\DeserializeSchemas.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\UserInterface.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Hardware.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\HardwareValidation.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AllowDirtyRepo</Selector>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OdorControl.bonsai" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SessionName" Selector="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DataDirectory</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder />
              <SessionName xsi:nil="true" />
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateRepository">
                <p1:Path>../.</p1:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Repository</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,p2:OlfactometerChannelConfig)">
              <rx:Name>CurrentOdorBeingCalibrated</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\CalibrationLogic.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
        <rx:Name>StartExperimentTrigger</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>TriggerHarpReadDump</Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>EndRoutine</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:OlfactometerChannelConfig">
                <p2:ChannelIndex>0</p2:ChannelIndex>
                <p2:ChannelType>Odor</p2:ChannelType>
                <p2:FlowRateCapacity>_100</p2:FlowRateCapacity>
                <p2:FlowRate>100</p2:FlowRate>
                <p2:OdorantDilution xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>olfactometerChannelCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="OlfactometerChannelsCount" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p5:CreateOneHotConcentrationArray">
                <p5:OlfactometerChannelsCount>12</p5:OlfactometerChannelsCount>
                <p5:Concentration>0</p5:Concentration>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>olfactometerChannelCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="OlfactometerChannelCount" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p5:CreateHubOdorMixture">
                <p5:PerOdorFlow>100</p5:PerOdorFlow>
                <p5:TotalFlow>1000</p5:TotalFlow>
                <p5:OlfactometerChannelCount>3</p5:OlfactometerChannelCount>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SetOdorMix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.05S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OdorEndValveState</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="10" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>